<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:TriggeredSpinnaker.bonsai">
        <ExposureTime>19000</ExposureTime>
        <Gain>0</Gain>
        <Binning>1</Binning>
        <SerialNumber>26310540</SerialNumber>
        <ColorProcessing>Default</ColorProcessing>
        <CameraTriggerEventsSubjectName>Camera0TriggerEvents</CameraTriggerEventsSubjectName>
        <FrameEventsSubjectName>FrameEvents</FrameEventsSubjectName>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BBgroup</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai">
              <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
              <PortName>COM3</PortName>
              <DumpRegisters>true</DumpRegisters>
              <Heartbeat>Enabled</Heartbeat>
              <EventsSubjectName>BehaviorEvents</EventsSubjectName>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.CameraTriggerController.bonsai">
              <Trigger0Frequency>50</Trigger0Frequency>
              <Trigger1Frequency>50</Trigger1Frequency>
              <BehaviorCommandsSubjectName>BehaviorCommands</BehaviorCommandsSubjectName>
              <BehaviorEventsSubjectName>BehaviorEvents</BehaviorEventsSubjectName>
              <Camera0TriggerEventsSubjectName>Camera0TriggerEvents</Camera0TriggerEventsSubjectName>
              <Camera1TriggerEventsSubjectName>Camera1TriggerEvents</Camera1TriggerEventsSubjectName>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.Timestamps.bonsai">
              <EventsSubjectName>BehaviorEvents</EventsSubjectName>
              <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEvents</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Control</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StartCameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>MButton D Control</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StopCameras</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogController.bonsai">
              <SubjectId>Algernon</SubjectId>
              <SessionId>001</SessionId>
              <Path>C:\LocalData</Path>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogHarpDevice.bonsai">
              <LogName>Behavior</LogName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameEvents</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogVideo</Name>
              <Description>Chunks and logs a timestamped video stream into the base data log.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>FormatFileName</Name>
                    <Description>Generates a log filename based on the input timestamp.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PathPrefix</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Cameras</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>VideoData</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>csv</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}\{1}\{2}.{3}</Format>
                          <Selector>Item1,Item2,Item3,Item4</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="1" To="7" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="7" Label="Source3" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source4" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.ChunkData.Timestamp</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.ChunkData.FrameID</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.ChunkData.ExposureTime</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Item1 as Seconds,
Item2 as Timestamp,
Item3 as FrameID,
Item4 as ExposureTime)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="FileName" />
                        </Expression>
                        <Expression xsi:type="io:CsvWriter">
                          <io:FileName>C:\LocalData\sub-Algernon\ses-001_date-2026-10-21T09-56-36\Cameras\VideoData.csv</io:FileName>
                          <io:Append>false</io:Append>
                          <io:Overwrite>true</io:Overwrite>
                          <io:Suffix>None</io:Suffix>
                          <io:IncludeHeader>false</io:IncludeHeader>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="0" To="4" Label="Source1" />
                        <Edge From="1" To="5" Label="Source1" />
                        <Edge From="2" To="5" Label="Source2" />
                        <Edge From="3" To="5" Label="Source3" />
                        <Edge From="4" To="5" Label="Source4" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="8" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>FormatFileName</Name>
                    <Description>Generates a log filename based on the input timestamp.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PathPrefix</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Cameras</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>VideoData</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>avi</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}\{1}\{2}.{3}</Format>
                          <Selector>Item1,Item2,Item3,Item4</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="1" To="7" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="7" Label="Source3" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source4" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FrameRate" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>C:\LocalData\sub-Algernon\ses-001_date-2026-10-21T09-56-36\Cameras\VideoData.avi</cv:FileName>
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>false</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>50</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source2" />
                  <Edge From="8" To="9" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera0TriggerEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogData.bonsai">
              <LogName>Camera0Triggers</LogName>
              <Selector>Seconds</Selector>
              <Extension>csv</Extension>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>