<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai">
        <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
        <PortName>COM3</PortName>
        <DumpRegisters>true</DumpRegisters>
        <Heartbeat>Enabled</Heartbeat>
        <EventsSubjectName>BehaviorEvents</EventsSubjectName>
      </Expression>
      <Expression xsi:type="harp:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="harp:TimestampMicroseconds" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Config</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePulseDO2Payload">
                <beh:PulseDO2>10</beh:PulseDO2>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                <beh:OutputPulseEnable>DO2</beh:OutputPulseEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO2</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:LicketySplit.bonsai">
        <CommandsSubjectName>LickCommands</CommandsSubjectName>
        <PortName>COM4</PortName>
        <DumpRegisters>true</DumpRegisters>
        <Heartbeat>Enabled</Heartbeat>
        <EventsSubjectName>LickEvents</EventsSubjectName>
        <Channel0TriggerThreshold>0</Channel0TriggerThreshold>
        <Channel0UntriggerThreshold>0</Channel0UntriggerThreshold>
        <LickStateSubjectName>LickState</LickStateSubjectName>
      </Expression>
      <Expression xsi:type="harp:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="harp:TimestampMicroseconds" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LickState</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>